PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trial
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Welcome
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome
        Remember the image persented.
  Routine recognition
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome to 3rd Phase

        Press Y if you have seen the image before. Otherwise press N.
    ImageComponent image_2
      image [set every repeat] = $imagefile2
      size = (1000, 500)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.5
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine rate
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    ImageComponent image_3
      image = $imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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  Routine rate_2
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    ImageComponent image_4
      image = $images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = extermely unlikable, unlikable, neutreal, likable, extermely likable
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine affective_rating
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    TextboxComponent textbox_3
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        welcome to 2 phase

        Rate the picture according to your will.
    ImageComponent image_5
      image [set every repeat] = $imagefile
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 0
      labels = 'extermely', 'very', 'moderate', 'slightly', 'not at all'
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ims.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imagefile': 'imagefile/main-qimg-66e23acac0b2fab0fb5093626b287d8f-lq.jfif', 'variable': 'fear'},
      {'imagefile': 'imagefile/main-qimg-944d6bc7c6c31e88770c0eda23047687-lq.jfif', 'variable': 'fear'},
      {'imagefile': 'imagefile/hippo.jpg', 'variable': 'fear'},
      {'imagefile': 'imagefile/maxresdefault.jpg', 'variable': 'fear'},
      {'imagefile': 'imagefile/centipide.jfif', 'variable': 'disgust'},
      {'imagefile': 'imagefile/creepy.jfif', 'variable': 'disgust'},
      {'imagefile': 'imagefile/larva-6137240_1280.jpg', 'variable': 'disgust'},
      {'imagefile': 'imagefile/leopard-slugs-penes-15Aug2015-VT.jpg', 'variable': 'disgust'},
      {'imagefile': 'imagefile/birds-1.jpg', 'variable': 'neutral'},
      {'imagefile': 'imagefile/kingfisher-2046453_640.jpg', 'variable': 'neutral'},
      {'imagefile': 'imagefile/doveGE-57a1097f5f9b589aa90076bf.jpg', 'variable': 'neutral'},
      {'imagefile': 'imagefile/sq_bird_from_home_noppadolpaothong_0018.jpg', 'variable': 'neutral'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = ims.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imagefile': 'imagefile/main-qimg-66e23acac0b2fab0fb5093626b287d8f-lq.jfif', 'variable': 'fear'},
      {'imagefile': 'imagefile/main-qimg-944d6bc7c6c31e88770c0eda23047687-lq.jfif', 'variable': 'fear'},
      {'imagefile': 'imagefile/hippo.jpg', 'variable': 'fear'},
      {'imagefile': 'imagefile/maxresdefault.jpg', 'variable': 'fear'},
      {'imagefile': 'imagefile/centipide.jfif', 'variable': 'disgust'},
      {'imagefile': 'imagefile/creepy.jfif', 'variable': 'disgust'},
      {'imagefile': 'imagefile/larva-6137240_1280.jpg', 'variable': 'disgust'},
      {'imagefile': 'imagefile/leopard-slugs-penes-15Aug2015-VT.jpg', 'variable': 'disgust'},
      {'imagefile': 'imagefile/birds-1.jpg', 'variable': 'neutral'},
      {'imagefile': 'imagefile/kingfisher-2046453_640.jpg', 'variable': 'neutral'},
      {'imagefile': 'imagefile/doveGE-57a1097f5f9b589aa90076bf.jpg', 'variable': 'neutral'},
      {'imagefile': 'imagefile/sq_bird_from_home_noppadolpaothong_0018.jpg', 'variable': 'neutral'}]
    Routine affective_rating
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = cons_ims.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\birds.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\dbrid.jpg', 'variable': 'distractor', 'corr_resp': 0},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\baboon.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\bird3.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\bird4.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\distrac.jpg', 'variable': 'distractor', 'corr_resp': 0},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\birds2.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\centipide.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\cheetah.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\creepy.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\larva.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\hippo.jpg', 'variable': 'target', 'corr_resp': 1},
      {'imagefile2': 'C:\\Users\\Suyashi Pradhan\\Desktop\\routine2\\hyena.jpg', 'variable': 'target', 'corr_resp': 1}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
    Routine recognition
  LoopTerminator trials_2
